PsychoPy2experiment version="2025.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = (1024, 768)
  expName = skeleton
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    GratingComponent probe
      size = (4, 4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
      tex = sin
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    KeyboardComponent task_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.7
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    TextComponent fixation
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    TextComponent task_prompt
      letterHeight = 0.5
      startVal [time (s)] = 0.0
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      text:
        CCW vs CW
        Z    X
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('cue', 'orientation'), ('intensity', np.int64(30))]),
      OrderedDict([('cue', 'orientation'), ('intensity', np.int64(90))]),
      OrderedDict([('cue', 'orientation'), ('intensity', np.int64(150))]),
      OrderedDict([('cue', 'orientation'), ('intensity', np.int64(210))]),
      OrderedDict([('cue', 'orientation'), ('intensity', np.int64(270))]),
      OrderedDict([('cue', 'orientation'), ('intensity', np.int64(330))]),
      OrderedDict([('cue', 'duration'), ('intensity', np.int64(600))]),
      OrderedDict([('cue', 'duration'), ('intensity', np.int64(800))]),
      OrderedDict([('cue', 'duration'), ('intensity', np.int64(1000))]),
      OrderedDict([('cue', 'duration'), ('intensity', np.int64(1200))]),
      OrderedDict([('cue', 'duration'), ('intensity', np.int64(1400))]),
      OrderedDict([('cue', 'duration'), ('intensity', np.int64(1600))])]
    Routine trial
  LoopTerminator trials
